<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:lsl="clr-namespace:Bonsai.Lsl;assembly=Bonsai.Lsl"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address xsi:nil="true" />
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>U8</harp:Type>
        <harp:IsArray>true</harp:IsArray>
      </Expression>
      <Expression xsi:type="harp:DeviceEvent">
        <harp:Type>MessageTimestamp</harp:Type>
      </Expression>
      <Expression xsi:type="lsl:SendLslStream">
        <lsl:StreamName>timestamps</lsl:StreamName>
        <lsl:StreamType>time</lsl:StreamType>
        <lsl:ChannelCount>1</lsl:ChannelCount>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>transmitted.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
      <Expression xsi:type="lsl:ReceiveLslStream">
        <lsl:StreamName>timestamps</lsl:StreamName>
        <lsl:TypeTag>d</lsl:TypeTag>
        <lsl:ChannelCount>1</lsl:ChannelCount>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SampleArray</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SampleTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>received.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Item1,Item2,Item3</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="8" Label="Source3" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="17" Label="Source3" />
      <Edge From="13" To="17" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>